<PlusConfiguration version="2.3">
  <DataCollection StartupDelaySec="1.0">
    <DeviceSet Name="PlusServer: Azure Kinect Camera " Description="Broadcasting acquired RGB and Depth video through PlusServer from Azure Kinect camera" />
    <Device Id="VideoDevice" Type="AzureKinect" AlignDepthStream="TRUE">
      <DataSources>
        <DataSource Type="Video" Id="VideoRGB" FrameType="RGB" FrameSize="1920" FrameRate="15" PortUsImageOrientation="UN" />
        <DataSource Type="Video" Id="VideoDEPTH" FrameType="DEPTH" FrameSize="1024" FrameRate="15" PortUsImageOrientation="UN" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStreamRGB" VideoDataSourceId="VideoRGB" />
        <OutputChannel Id="VideoStreamDEPTH" VideoDataSourceId="VideoDEPTH" />
      </OutputChannels>
    </Device>
  </DataCollection>
  <PlusOpenIGTLinkServer MaxNumberOfIgtlMessagesToSend="1" MaxTimeSpentWithProcessingMs="50" ListeningPort="18944" SendValidTransformsOnly="true" OutputChannelId="VideoStreamDEPTH">
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="VideoStreamDEPTH" EmbeddedTransformToFrame="VideoStreamDEPTH" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  <PlusOpenIGTLinkServer MaxNumberOfIgtlMessagesToSend="1" MaxTimeSpentWithProcessingMs="50" ListeningPort="18945" SendValidTransformsOnly="true" OutputChannelId="VideoStreamRGB">
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="VideoStreamRGB" EmbeddedTransformToFrame="VideoStreamRGB" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
</PlusConfiguration>