<PlusConfiguration version="2.0">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="PlusServer: Media Foundation video capture device - color"
      Description="Broadcasting acquired video through OpenIGTLink" />
    <Device
      Id="VideoDevice" 
      Type="DeckLinkVideo" 
      FrameSize="640 480"
      CaptureDeviceId="0" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF" ImageType="RGB_COLOR"  />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
  </DataCollection>
  
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    SendValidTransformsOnly="true" 
    OutputChannelId="VideoStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Image" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>
