<PlusConfiguration version="2.1">
  <DataCollection StartupDelaySec="1.0">
    <DeviceSet 
      Name="PlusServer: LeapMotion" 
      Description="Collecting orientation data from a LeapMotion hand tracker and broadcasting through OpenIGTLink"
    />
    <Device 
      Id="TrackerDevice"
      Type="LeapMotion"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Tool" Id="LeftIndexDistal" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerChannel">
          <DataSource Id="LeftIndexDistal"/>
        </OutputChannel>
      </OutputChannels>
    </Device>    
    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.igs.nrrd"
      EnableCompression="TRUE"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="TrackerChannel" />
      </InputChannels>
    </Device>
  </DataCollection>
  
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentLeaphProcessingMs="50" 
    ListeningPort="18944" 
    OutputChannelId="TrackerChannel"
    > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames> 
        <Transform Name="IndexKnuckleToTracker" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer> 
</PlusConfiguration>