<?xml version="1.0"?>
<PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet Name="PlusServer: HoloLens - NDI Polaris tracking sending TRANSFORM messages with passive markers"
               Description="Broadcasting tool tracking data through OpenIGTLink For NDI Polaris passive marker starting kit: Stylus (8700248), Tool (TraxisTA1D3x2), Phantom (Phantom), HoloLens (HoloLens)"/>

    <Device Id="TrackerDevice"
            Type="NDITracker"
            NetworkHostname="192.168.0.30"
            NetworkPort="8765"
            ToolReferenceFrame="Reference">
      <DataSources>
        <DataSource Type="Tool" Id="Stylus" RomFile="../NdiToolDefinitions/MagStylus.rom"/>
        <DataSource Type="Tool" Id="HoloLens" RomFile="../NdiToolDefinitions/HoloLens.rom"/>
        <DataSource Type="Tool" Id="Tool" RomFile="../NdiToolDefinitions/TraxisTA1D3x2.rom"/>
        <DataSource Type="Tool" Id="Phantom" RomFile="../NdiToolDefinitions/Phantom.rom"/>
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerChannel">
          <DataSource Id="Stylus"/>
          <DataSource Id="HoloLens"/>
          <DataSource Id="Tool"/>
          <DataSource Id="Phantom"/>
        </OutputChannel>
      </OutputChannels>
    </Device>

    <Device Id="CaptureDevice"
            Type="VirtualCapture"
            BaseFilename="RecordingTest.nrrd"
            EnableFileCompression="TRUE"
            EnableCapturingOnStart="FALSE">
      <InputChannels>
        <InputChannel Id="TrackerChannel"/>
      </InputChannels>
    </Device>
  </DataCollection>

  <CoordinateDefinitions>
    <Transform From="Tip" To="Stylus"
      Matrix="
        0.999688	0	0.0249626	1.98826
        -0.00028736	0.999934	0.0115081	0.916616
        -0.0249609	-0.0115117	0.999622	79.6197
        0	0	0	1"
      Error="0.115965" Date="013017_102345" />
  </CoordinateDefinitions>

  <PlusOpenIGTLinkServer MaxNumberOfIgtlMessagesToSend="1"
                         MaxTimeSpentWithProcessingMs="50"
                         ListeningPort="18944"
                         SendValidTransformsOnly="false"
                         OutputChannelId="TrackerChannel">
                         <!-- SendValidTransformsOnly="false" : This allows client apps to report invalid tools -->
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM"/>
      </MessageTypes>
      <TransformNames>
        <Transform Name="TipToReference"/>
        <Transform Name="HoloLensToReference"/>
        <Transform Name="ToolToReference"/>
        <Transform Name="PhantomToReference"/>
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>